<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="200" FOVy="200" FOVz="1" GradMaxAmpl="8" GradSlewRate="45" Name="P" Nx="32" Ny="32" Nz="1" TE="6.3" TR="20">
   <ConcatSequence LoopFlag="2" Name="C" Observe="NY=P.Ny" Repetitions="NY">
      <ATOMICSEQUENCE Name="Aslice">
         <GAUSSIANRFPULSE Bandwidth="6.2832" Duration="4" FlipAngle="90" Frequency="0" Name="RF" Symmetry="0.5"/>
         <TRAPGRADPULSE Area="8.2801" Axis="GZ" Duration="4" Name="GSS"/>
      </ATOMICSEQUENCE>
      <DELAYATOMICSEQUENCE Delay="TE" DelayType="C2C" Name="DTE" Observe="TE=P.TE" StartSeq="Aslice" StopSeq="Aro"/>
      <ATOMICSEQUENCE Name="Apre">
         <TRAPGRADPULSE Area="-A/2" Axis="GX" Duration="1" Name="preX" Observe="A=roX.Area"/>
         <TRAPGRADPULSE Area="-A/2" Axis="GY" Duration="1" Name="preY" Observe="A=roY.Area"/>
         <TRAPGRADPULSE Area="-A/2" Axis="GZ" Duration="1" Name="rphZ" Observe="A=GSS.Area"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="Aro">
         <TRAPGRADPULSE ADCFlag="2" ADCs="NX" Axis="GX" FlatTopArea="2*KMX*cos(Pi*C/R)" FlatTopTime="6.4" Name="roX" Observe="KMX=P.KMAXx, C=C.Counter, R=C.Repetitions, NX=P.Nx"/>
         <TRAPGRADPULSE Axis="GY" FlatTopArea="2*KMY*sin(Pi*C/R)" FlatTopTime="6.4" Name="roY" Observe="KMY=P.KMAXy, C=C.Counter, R=C.Repetitions, NY=P.Ny"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="Arfc">
         <TRAPGRADPULSE Area="A" Axis="GX" Duration="1" Name="rphX" Observe="A=preX.Area"/>
         <TRAPGRADPULSE Area="A" Axis="GY" Duration="1" Name="rphY" Observe="A=preY.Area"/>
      </ATOMICSEQUENCE>
      <DELAYATOMICSEQUENCE Delay="TR" DelayType="B2E" Name="DTR" Observe="TR=P.TR" StartSeq="Aslice"/>
   </ConcatSequence>
</Parameters>