<?xml version="1.0" encoding="utf-8"?>
<Parameters Name="P">
   <ConcatSequence Name="C1" Repetitions="3">
      <ATOMICSEQUENCE Name="A1">
         <HARDRFPULSE Duration="0.1" FlipAngle="90" Name="P1" Symmetry="0.5"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A2">
         <TRAPGRADPULSE Area="3*(C+1)" Name="P2" Observe="C1.Counter=C"/>
      </ATOMICSEQUENCE>
      <DELAYATOMICSEQUENCE ADCs="C+1" Delay="10*(C+1)" DelayType="B2E" Name="D1" Observe="C1.Counter=C" StartSeq="A1" StopSeq="A3"/>
      <ATOMICSEQUENCE Name="A3">
         <TRAPGRADPULSE Area="-A" Name="P3" Observe="P2.Area=A"/>
      </ATOMICSEQUENCE>
   </ConcatSequence>
</Parameters>